; noah2-Spv1Cc

; 13C sensitivity-enhanced HSQC ('version 1')
;     [use -DEDIT for multiplicity editing]
; 1H CLIP-COSY (States)

;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

;E. Kupce, T. D. W. Claridge
;Angew. Chem. Int. Ed. 2017, 56 (39), 11779-11783
;NOAH: NMR Supersequences for Small Molecule Analysis and Structure Elucidation

;M. R. M. Koos, G. Kummerlowe, L. Kaltschnee, C. M. Thiele, B. Luy
;Angew. Chem. Int. Ed. 2016, 55 (27), 7655-7659
;Clean In-Phase Experiment for the Rapid Acquisition of COSY-type Correlations

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>

#ifdef NUS
define list<loopcounter> t1list=<$VCLIST>
#endif

define delay DC_SEHSQC_DP1
define delay DC_SEHSQC_DP2
define delay DC_SEHSQC_DP3
define delay DC_SEHSQC_DP4
define delay DC_SEHSQC_DP5
define delay DC_SEHSQC_DP6
define delay DC_SEHSQC_DP7
define delay DC_SEHSQC_DP8
define delay DC_SEHSQC_DP9
"cnst41        = 2*sfo2/sfo1"                    ; gradient ratio
"d0            = 3u"                             ; 13C HSQC t1
"d2            = 0.5s/cnst2"                     ; JCOMP
"d4            = 0.25s/cnst2"                    ; 13C INEPT
"d10           = 3u"                             ; CLIP-COSY t1
"d12           = 0.25s/cnst12"                   ; CLIP-COSY mixing (< 1/4J(HH))
"in0           = inf1/2"                         ; 13C HSQC increment
"in10          = 2*dw"                           ; CLIP-COSY increment
"p2            = p1*2"                           ; 1H hard 180
"p4            = p3*2"                           ; 13C hard 180
"DC_SEHSQC_DP1 = d4-p14/2"
"DC_SEHSQC_DP2 = d4+p14/2"
"DC_SEHSQC_DP3 = p16+d16+p2/2+4u+d0-p3*2/PI"
"DC_SEHSQC_DP4 = DC_SEHSQC_DP3-p2"
"DC_SEHSQC_DP5 = d2-p1"
"DC_SEHSQC_DP6 = d6-cnst17*p24/2-p16-d16"
"DC_SEHSQC_DP7 = d4-larger(p2,p14)/2-p16-d16"
"DC_SEHSQC_DP8 = d4-larger(p2,p14)/2-p1*0.78"
"DC_SEHSQC_DP9 = d4-p16-d16-de-larger(p2,p14)/2"
define list<gradient> GC_SEHSQC_DP={cnst41}
"l0      = td1/4"             ; Total number of 13C t1 increments
"l1      = 0"                 ; Running counter of 13C t1 increments
"l2      = 0"                 ; Counter, even for echo, odd for antiecho
"l3      = 0"                 ; Running counter for NS
"acqt0   = 0"
baseopt_echo

1 ze
2 30m
3 5m
4 50u UNBLKGRAD

#ifdef NUS
  "d0=(in0*t1list)+3u"
  "d10=(in10*t1list)+3u"
#endif
  "l3 = l3 + 1"

  ; Cleanup
  4u pl2:f2
  (p3 ph0):f2
  4u pl1:f1
  p16:gp0
  d16
  (p1 ph0):f1
  4u
  p16:gp0*1.37
  d16
  4u BLKGRAD
  d1 st0
  4u UNBLKGRAD


  ; MODULE 1
  ; 13C-1H seHSQC 'version 1'

  ; INEPT
  (p1 ph0):f1
  DC_SEHSQC_DP1
  (p14:sp3 ph0):f2
  (p2 ph0):f1
  DC_SEHSQC_DP2 pl2:f2
  (p1 ph1):f1
  (p3 ph5):f2

  ; t1 and optional multiplicity editing
#ifdef EDIT
  DC_SEHSQC_DP3
  (p31:sp18 ph0):f2
  4u
  p16:gp4
  d16
  d0
  (p2 ph0):f1
  d0
  4u
  p16:gp4
  d16
  d2
  (p31:sp18 ph0):f2
  DC_SEHSQC_DP4
  (p2 ph0):f1
  DC_SEHSQC_DP5 pl2:f2
#else
  DC_SEHSQC_DP3
  (p14:sp3 ph0):f2
  4u
  p16:gp4
  d16
  d0
  (p2 ph1):f1
  d0
  4u
  p16:gp4
  d16
  (p14:sp3 ph0):f2
  DC_SEHSQC_DP3 pl2:f2
#endif /* EDIT */

  ( center
    (p3 ph7):f2
    (p1 ph0 p1 ph1):f1
  )

  ; first spin echo
  DC_SEHSQC_DP6
  p19:gp6
  d16
  (center (p2 ph1):f1 (p24:sp7 ph7):f2 )
  DC_SEHSQC_DP6 pl2:f2
  p19:gp6
  d16
  ; second spin echo
  (center (p1 ph2):f1 (p3 ph9):f2 )
  p16:gp7
  d16
  DC_SEHSQC_DP7
  (center (p2 ph1):f1 (p14:sp3 ph7):f2 )
  DC_SEHSQC_DP7
  p16:gp7
  d16
  ; third spin echo
  (p1 ph1):f1
  DC_SEHSQC_DP8
  (center (p2 ph0):f1 (p14:sp3 ph7):f2 )
  p16:gp4*EA*GC_SEHSQC_DP
  d16
  DC_SEHSQC_DP9 pl12:f2
  goscnp ph28 cpd2:f2
  50u do:f2

  ; Cleanup
  4u pl1:f1
  4u pl2:f2
  (p3 ph0):f2
  4u
  p16:gp0*1.77
  2m st


  ; MODULE 2
  ; 1H-1H CLIP-COSY

  (p1 ph6):f1
  d10
  (p1 ph0):f1
  10u gron12
  (p32:sp29 ph0):f1
  20u groff
  d16 pl1:f1
  (p1 ph0):f1

  ; in-phase transfer via perfect echo
  d12
  (p2 ph1):f1
  d12
  (p1 ph1):f1
  d12
  (p2 ph3):f1
  d12

  (p1 ph0):f1
  10u gron12*1.333
  (p32*0.75:sp29 ph2):f1
  20u groff
  p16:gp11
  d16 pl1:f1 
  4u
  (p1 ph0):f1

  go=2 ph26

  ; echo/antiecho loop
  "l2 = l2 + 1"
  1m igrad EA
  1m ip6
  1m ip9*2
  30m wr #0 if #0 zd
  lo to 3 times 2

  ; t1 incrementation
  "l1 = l1 + 1"
#ifdef NUS
  1m t1list.inc
#endif
  1m ip5*2
  1m rp6
  1m ip28*2

  ; 13C t1 incrementation
#ifdef NUS
#else
  1m id0
#endif

  ; 1H t1 incrementation
#ifdef NUS
#else
  1m id10
#endif /* NUS */

  lo to 4 times l0

50u BLKGRAD
exit

ph0=0
ph1=1
ph2=2
ph3=3
ph5=0 2
ph6=0 2
ph7=0 0 2 2
ph9=1 1 3 3
ph26=0 2
ph28=1 3 3 1

;gpnam0: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam7: SMSQ10.100
;gpnam11: SMSQ10.100
;gpz0: 29% (for purging)
;gpz4: 70% (13C CTP)
;gpz6: 11% (13C spin echo CTP)
;gpz7: -5% (13C spin echo CTP)
;gpz11: 43% (1H purge gradient)
;gpz12: 11% (1H ZQ filter)

;WaveMaker shaped pulses (use 'wvm -a' to generate)
;sp3:wvm:wu180C13: cawurst-20(60 kHz, 0.5 ms; L2H)
;sp18:wvm:wu180Jcomp: cawurst-40(280 ppm; Jcomp, L2H)
;cpd2:wvm:wudec: cawurst_d-20(220 ppm, 1.4 ms; L2H)

;cnst2: = 1J(CH)
;cnst12: > J(HH), ca. 30 Hz for CLIP-COSY mixing
;cnst17: = -0.5 for Crp60comp.4
;cnst41: gradient ratio (2*C/H)
;cpd2: 13C decoupling according to sequence defined by cpdprg2
;d0: 13C t1
;d1: relaxation delay
;d2: 1/2J(CH)
;d4: 1/4J(CH)
;d6: 1/8J(CH) for all multiplicities, 1/4J(CH) for CH only
;d10: 1H t1
;d12: <1/4J(HH) CLIP-COSY mixing time
;d16: delay for homospoil/gradient recovery [200 us]
;l0: total number of t1 increments
;l1: running counter of t1 increments
;l2: even for echo, odd for antiecho
;l3: running counter for scan number
;p1: f1 channel -  90 degree high power pulse
;p2: f1 channel - 180 degree high power pulse
;p3: f2 channel -  90 degree high power pulse
;p4: f2 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: gradient pulse   [1 ms]
;p19: gradient pulse 2 [600 us]
;p24: f2 channel - 180 degree shaped pulse for refocusing
;      = 2msec for Crp60comp.4
;p31: f2 channel - 180 degree shaped pulse for inversion with J-compensation
;p32: f1 channel - 180 degree shaped pulse (adiabatic)      [20 msec]
;     smoothed chirp (sweepwidth, 20% smoothing, 10000 points)
;pl1: f1 channel - power level for pulse (default)
;pl2: f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse (180 degree inversion)
;sp7: f2 channel - shaped pulse (180 degree refocusing)
;sp18: f2 channel - shaped pulse (180 degree with J-compensation)
;sp29: f1 channel - shaped pulse (adiabatic)
;spnam3: Crp60,0.5,20.1 or WaveMaker
;spnam7: Crp60comp.4
;spnam18: Crp60_xfilt.2 or WaveMaker
;spnam29: Crp60,20,20.10
;aq: acquisition time
;ds: >= 16
;FnMODE: echo-antiecho
;NBL: number of blocks (NOAH modules)
;ns: 1 * n

; auprog: noah_hsqc:noah_clipcosy States
; ngn-2.0.9: constructed from C_SEHSQC_DP, H_CLIP_COSY
; pulse programme generated on Sat Jun 12 2021 01:34:38 GMT+0100 (British Summer Time)